# Generated by Configurator on Fri Dec 14 19:02:21 EST 2012

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/tty.SLAB_USBtoUART,SerialManager,/dev/tty.SLAB_USBtoUART
Device,CAM,Hamamatsu,Hamamatsu_DCAM
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage
Device,DShutter,DemoCamera,DShutter
Device,DObjective,DemoCamera,DObjective
Device,/dev/tty.usbmodem3d21,SerialManager,/dev/tty.usbmodem3d21

# Pre-init settings for devices
Property,/dev/tty.SLAB_USBtoUART,AnswerTimeout,500.0000
Property,/dev/tty.SLAB_USBtoUART,BaudRate,115200
Property,/dev/tty.SLAB_USBtoUART,DataBits,8
Property,/dev/tty.SLAB_USBtoUART,DelayBetweenCharsMs,0.0000
Property,/dev/tty.SLAB_USBtoUART,Handshaking,Off
Property,/dev/tty.SLAB_USBtoUART,StopBits,1
Property,CAM,Slot,0
Property,XYStage,Port,/dev/tty.SLAB_USBtoUART
Property,ZStage,Axis,Z
Property,ZStage,Port,/dev/tty.SLAB_USBtoUART

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,CAM
Property,Core,Shutter,DShutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-5
Label,DObjective,4,Objective-4
Label,DObjective,3,Objective-3
Label,DObjective,2,Objective-2
Label,DObjective,1,Objective-1
Label,DObjective,0,Objective-0

# Configuration presets
# Group: 4xbin
# Preset: 128gain
ConfigGroup,4xbin,128gain,CAM,Binning,4
ConfigGroup,4xbin,128gain,CAM,Exposure,100.0000
ConfigGroup,4xbin,128gain,CAM,ScanMode,1
ConfigGroup,4xbin,128gain,CAM,Gain,128
ConfigGroup,4xbin,128gain,CAM,Trigger,Software
ConfigGroup,4xbin,128gain,CAM,TriggerPolarity,Negative


# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,CAM,Binning,2
ConfigGroup,Camera,MedRes,CAM,PixelType,8bit

# Preset: HiRes
ConfigGroup,Camera,HiRes,CAM,Binning,1
ConfigGroup,Camera,HiRes,CAM,PixelType,16bit


# Group: diffgains
# Preset: 64
ConfigGroup,diffgains,64,CAM,Binning,4
ConfigGroup,diffgains,64,CAM,Exposure,100.0000
ConfigGroup,diffgains,64,CAM,Gain,64

# Preset: 0
ConfigGroup,diffgains,0,CAM,Binning,4
ConfigGroup,diffgains,0,CAM,Exposure,100.0000
ConfigGroup,diffgains,0,CAM,Gain,0

# Preset: 32
ConfigGroup,diffgains,32,CAM,Binning,4
ConfigGroup,diffgains,32,CAM,Exposure,100.0000
ConfigGroup,diffgains,32,CAM,Gain,32


# Group: BF
# Preset: leveltrigger
ConfigGroup,BF,leveltrigger,CAM,Binning,4
ConfigGroup,BF,leveltrigger,CAM,Exposure,100.0000
ConfigGroup,BF,leveltrigger,CAM,Gain,0
ConfigGroup,BF,leveltrigger,CAM,High Dynamic Range Mode,2
ConfigGroup,BF,leveltrigger,CAM,ScanMode,1
ConfigGroup,BF,leveltrigger,CAM,Trigger,Level
ConfigGroup,BF,leveltrigger,CAM,TriggerPolarity,Negative



# PixelSize settings
# Resolution preset: Res0x63
ConfigPixelSize,Res0x63,CAM,Exposure,100.0000
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,CAM,Gain,128
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,Backlash-B,0.0000
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,Error-E(nm),400.0000
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,FinishError-PCROS(nm),24.0000
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,JoyStick Fast Speed,60
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,JoyStick Reverse,Off
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,JoyStick Slow Speed,1
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,MotorOnOff,On
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,OverShoot(um),0.0000
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,Speed-S,5.7459
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,TransposeMirrorX,0
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,TransposeMirrorY,0
PixelSize_um,Res0x63,0.1
ConfigPixelSize,Res0x63,XYStage,Wait_Cycles,0
PixelSize_um,Res0x63,0.1

# Resolution preset: Res1
ConfigPixelSize,Res1,CAM,Exposure,100.0000
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,CAM,Gain,128
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,Backlash-B,0.0400
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,Error-E(nm),400.0000
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,FinishError-PCROS(nm),24.0000
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,JoyStick Fast Speed,60
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,JoyStick Reverse,Off
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,JoyStick Slow Speed,1
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,MotorOnOff,On
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,OverShoot(um),0.0000
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,Speed-S,5.7459
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,TransposeMirrorX,0
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,TransposeMirrorY,0
PixelSize_um,Res1,0.1
ConfigPixelSize,Res1,XYStage,Wait_Cycles,0
PixelSize_um,Res1,0.1

