# Generated by Configurator on Wed Oct 23 09:17:29 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/tty.SLAB_USBtoUART,SerialManager,/dev/tty.SLAB_USBtoUART
Device,/dev/tty.usbmodemfd531,SerialManager,/dev/tty.usbmodemfd531
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort
Device,Hamamatsu_DCAM,Hamamatsu,Hamamatsu_DCAM

# Pre-init settings for devices
Property,XYStage,Port,/dev/tty.SLAB_USBtoUART
Property,ZStage,Axis,Z
Property,ZStage,Port,/dev/tty.SLAB_USBtoUART
Property,Hamamatsu_DCAM,Slot,0
Property,FreeSerialPort,Port,/dev/tty.usbmodemfd531

# Pre-init settings for devices
Property,/dev/tty.SLAB_USBtoUART,AnswerTimeout,500.0000
Property,/dev/tty.SLAB_USBtoUART,BaudRate,115200
Property,/dev/tty.SLAB_USBtoUART,DataBits,8
Property,/dev/tty.SLAB_USBtoUART,DelayBetweenCharsMs,0.0000
Property,/dev/tty.SLAB_USBtoUART,Handshaking,Off
Property,/dev/tty.SLAB_USBtoUART,Parity,None
Property,/dev/tty.SLAB_USBtoUART,StopBits,1
Property,/dev/tty.SLAB_USBtoUART,Verbose,1
Property,/dev/tty.usbmodemfd531,AnswerTimeout,500.0000
Property,/dev/tty.usbmodemfd531,BaudRate,9600
Property,/dev/tty.usbmodemfd531,DataBits,8
Property,/dev/tty.usbmodemfd531,DelayBetweenCharsMs,0.0000
Property,/dev/tty.usbmodemfd531,Handshaking,Off
Property,/dev/tty.usbmodemfd531,Parity,None
Property,/dev/tty.usbmodemfd531,StopBits,1
Property,/dev/tty.usbmodemfd531,Verbose,1

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Hamamatsu_DCAM
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Trackstim
# Preset: default
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,Binning,4
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,Exposure,100.0000
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,Gain,128
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,High Dynamic Range Mode,2
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,ScanMode,1
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,Trigger,Software
ConfigGroup,Trackstim,default,Hamamatsu_DCAM,TriggerPolarity,Negative



# PixelSize settings

