# Generated by Configurator on Wed Oct 16 14:11:42 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: static_imaging
# Preset: static_imaging
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,Binning,4x4
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,EXPOSURE FULL RANGE,DISABLE
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,EXPOSURE TIME UNITS,MILLISECONDS
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,Exposure,103.9040
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,MINIMUM ACQUISITION TIMEOUT,60000
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[0],0.0000
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[1],0.0000
ConfigGroup,static_imaging,static_imaging,HamamatsuHam_DCAM,OUTPUT TRIGGER DELAY[2],0.0000



# PixelSize settings

