# Generated by Configurator on Tue Oct 22 08:12:35 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/tty.SLAB_USBtoUART,SerialManager,/dev/tty.SLAB_USBtoUART
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage
Device,Hamamatsu_DCAM,Hamamatsu,Hamamatsu_DCAM

# Pre-init settings for devices
Property,/dev/tty.SLAB_USBtoUART,AnswerTimeout,500.0000
Property,/dev/tty.SLAB_USBtoUART,BaudRate,115200
Property,/dev/tty.SLAB_USBtoUART,DelayBetweenCharsMs,0.0000
Property,/dev/tty.SLAB_USBtoUART,Handshaking,Off
Property,/dev/tty.SLAB_USBtoUART,Parity,None
Property,/dev/tty.SLAB_USBtoUART,StopBits,1
Property,/dev/tty.SLAB_USBtoUART,Verbose,1
Property,XYStage,Port,/dev/tty.SLAB_USBtoUART
Property,ZStage,Axis,Z
Property,ZStage,Port,/dev/tty.SLAB_USBtoUART
Property,ZStage,RingBufferSize,50
Property,Hamamatsu_DCAM,Slot,0

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Hamamatsu_DCAM
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: hamamatsu_property_test
# Preset: NewPreset
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,ActualInterval-ms,100000.0000
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Binning,4
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Bits per Channel,12.0000
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,CCDTemperature,0.0000
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Exposure,100.0000
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,FrameBufferSize,30
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Gain,0
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Gamma,0
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,High Dynamic Range Mode,2
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Output Trigger Delay,0.0000
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Output Trigger Period,0.0010
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Output Trigger Polarity,Negative
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,PixelType,16bit
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,ScanMode,1
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Sensor Cooler Fan,2
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,Trigger,Software
ConfigGroup,hamamatsu_property_test,NewPreset,Hamamatsu_DCAM,TriggerPolarity,Negative



# PixelSize settings

